;imaging_zgesgp.cw
; 1D CSI
; td1 is hard-coded (look for size of r1d list)
;using baseopt
;avance-version (07/10/04)
;2D sequence
;water suppression using excitation sculpting with gradients
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

; define list of gradient amplitudes, from -1 to 1, where final value is never reached
define list<grad_scalar, 128> r1d
"td1=128"

"p2=p1*2"
"d12=20u"


"TAU=de+p1*2/3.1416+50u+p19+d16"
"acqt0=de"

1 ze
2 30m
#ifdef PRESAT
  d12 fq=cnst19(bf ppm):f1 ; off-resonance decoupling
  d12 pl9:f1 BLKGRAD
  d1 cw:f1
  4u do:f1
  4u pl1:f1
  d12 fq=0:f1 ; restore 1H frequency
#else
  d12 pl1:f1 BLKGRAD
  d1
  8u
#endif
  p1 ph1
  50u UNBLKGRAD

  ; imaging gradient
  p19:gp3*r1d
  d16

  ; first echo
  p16:gp1
  d16 pl0:f1
  (p12:sp11 ph2:r):f1
  4u
  d12 pl1:f1
  p2 ph3
  4u
  p16:gp1
  d16 

  TAU

  ; second echo
  p16:gp2
  d16 pl0:f1
  (p12:sp11 ph4:r):f1
  4u
  d12 pl1:f1
  p2 ph5
  4u
  p16:gp2
  d16

  ; acquisition
  go=2 ph31
  30m mc #0 to 2 F1QF(r1d.inc)
  4u BLKGRAD
exit


ph1=0
ph2= 0 1 0 1  2 3 2 3  0 1 0 1  2 3 2 3
ph3= 2 3 2 3  0 1 0 1  2 3 2 3  0 1 0 1 
ph4= 0 0 1 1  0 0 1 1  2 2 3 3  2 2 3 3 
ph5= 2 2 3 3  2 2 3 3  0 0 1 1  0 0 1 1 
ph31=0 2 2 0  0 2 2 0  0 2 2 0  0 2 2 0


;pl0 : 120dB
;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;p19: imaging gradient [200 usec]
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;NS: 8 * n, total number of scans: NS * TD0
;DS: 4


;use gradient ratio:    gp 1 : gp 2
;                         31 :   11

;for z-only gradients:
;gpz1: 31%
;gpz2: 11%
;gpz3: 17%

;use gradient files:
;gpnam1: SINE.100
;gpnam2: SINE.100
;gpnam3: SINE.32


