;Added option for off-resonance presat (e.g. to suppress urea signal), 21/6/15
;
;With option for 1D (first row)
;
;sfhmqcf3gpph
;avance-version (09/11/18)
;SOFAST HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive
;with decoupling during acquisition
;
;P.Schanda and B. Brutscher, J. Am. Chem. Soc. 127, 8014 (2005)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

"cnst4=92"

"d11=30m"
"d12=20u"
"d13=4u"
"d21=1s/(cnst4*2)"

"p16=1000u"

"in0=inf1"

# ifndef ONE_D
"d0=in0/2-p21*4/3.1415"
# endif /*ONE_D*/


# ifdef OFFRES_PRESAT
  "TAU=d1-10m-60u-d12*2-d13"
# else
  "TAU=d1-10m"
# endif /*OFFRES_PRESAT*/


/******************************************************/
/*  Predefined shapes for 1H pulses       *************/
/*  cnst1: center of excitation band     **************/
/*  cnst2: excitation band width         **************/
/******************************************************/
"cnst19=8.2"

/*  PC9 (p39, sp23)   */
"p39=3100*600.4/bf1" /*  PC9  pulse length  */
"spw23=plw1*(pow((p1*1.33/p39)/0.125,2))" /* PC9  power level  */
"spoffs23=bf1*(cnst19/1000000)-o1"  /*  PC9  offset */
"spoal23=1"
"cnst39=0.529"

/*  REBURP (p40, sp24)   */
"p40=2257*600.4/bf1" /* REBURP pulse length  */
"spw24=plw1*(pow((p1*1.97/p40)/0.0798,2))"   /* REBURP power level  */
"spoffs24=bf1*(cnst19/1000000)-o1" /* REBURP offset */
"spoal24=0.5"

/* 15N decoupling */
"p62=350u"
"plw26=plw3*(pow((p21/p62),2))"   /* CPD power level  */


"DELTA1=d21-p16-d16-p39*cnst39"
"DELTA2=p39*cnst39-de-4u"
"acqt0=de"


1 ze 
  d11 pl26:f3
2 10m do:f3

# ifdef OFFRES_PRESAT
  30u fq=cnst21(bf hz):f1
  d12 pl9:f1
  TAU cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  30u fq=0:f1
# else
  TAU
# endif /*OFFRES_PRESAT*/

3 d12 pl3:f3
  50u UNBLKGRAD

  p16:gp2
  d16

  (p39:sp23 ph1):f1
  p16:gp1
  d16

# ifndef ONE_D

#   ifdef LABEL_CN
  (center (p40:sp24 ph2):f1 (p8:sp13 ph1):f2 (DELTA1 p21 ph3 d0 p21 ph4 DELTA1):f3 )
#   else
  (center (p40:sp24 ph2):f1 (DELTA1 p21 ph3 d0 p21 ph4 DELTA1):f3 )
#   endif /*LABEL_CN*/

# else

 (center (p40:sp24 ph2):f1 (DELTA1 p21 ph3 6u p21 ph4 DELTA1):f3 )

# endif /*ONE_D*/

  DELTA2
  p16:gp1
  d16 pl26:f3
  4u BLKGRAD
  go=2 ph31 cpd3:f3 
  10m do:f3 mc #0 to 2 
     F1PH(ip3, id0)
exit 
  

ph1=0 
ph2=0 
ph3=0 2
ph4=0 0 2 2 
ph29=0
ph31=0 2 2 0


;p1  : f1 channel - 90 degree high power pulse
;pl3 : f3 channel - power level for pulse (default)
;pl26: f3 channel - power level for CPD/BB decoupling (low power)
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;sp23: f1 channel - shaped pulse 120 degree (Pc9_4_120.1000)
;sp24: f1 channel - shaped pulse 180 degree (Reburp.1000)
;spnam23: Pc9_4_120.1000
;spnam24: Reburp.1000
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse                       [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p39: f1 channel - 120 degree shaped pulse for excitation
;                      Pc9_4_120.1000 (120o)    (2325 us at 800 MHz)
;spnam23: Pc9_4_120.1000
;p40: f1 channel - 180 degree shaped pulse for refocussing
;                      Reburp.1000              (1700 us at 800  MHz)
;spnam24: Reburp.1000
;d0 : incremented delay (2D) = in0/2-p21*4/3.1415
;d1 : relaxation delay
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d21 : 1/(2J)NH
;cnst4: = J(NH)
;cnst19: H(N) chemical shift (offset, in ppm)  [8.2 ppm]
;cnst39: compensation of chemical shift evolution during p39
;           Pc9_4_120.1000: 0.529
;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/ SW(N) = 2 * DW(N)
;nd0: 1
;NS: 2 * n
;DS: 16
;aq: <= 100 msec
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEC
;cpd3: decoupling according to sequence defined by cpdprg3: garp4.p62
;cpdprg3: garp4.p62
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
;          use pulse of >= 350 usec


;use gradient ratio:	gp 1 : gp 2
;			  11 :    7


;for z-only gradients:
;gpz1: 11%
;gpz2:  7%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1



